PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine instruction
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    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        阅读并记住每句话，完成记忆后
        用左手大拇指按下回车键
        然后开始回想刚才的话
        按下回车键开始实验
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine trials
    RoutineSettingsComponent trials
      stopVal [duration (s)] = 5
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $句子
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  Routine end
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    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        实验结束
        按0键退出
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine recall
    RoutineSettingsComponent recall
      stopVal [duration (s)] = 3.3
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    ParallelOutComponent p_port
      address = 0x0378
      register = EIO
      startData = 100
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine trials2
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine recall2
    RoutineSettingsComponent recall2
      stopVal [duration (s)] = 3.2
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    ParallelOutComponent p_port_2
      address = 0x0378
      register = EIO
      startData = 101
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 1.8
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    TextComponent text_5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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Flow
  Routine instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = split_data_45.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'句子': '欢迎光临，请进'},
      {'句子': '坐下来，我去拿饮料'},
      {'句子': '饮料真是太好了，谢谢'},
      {'句子': '好久不见，你最近怎么样'},
      {'句子': '我在读研究生'},
      {'句子': '你的专业是英语翻译'},
      {'句子': '毕业后应该容易找到工作'},
      {'句子': '我也很想念你'},
      {'句子': '你看起来比以前更漂亮了'},
      {'句子': '今天天气真好，阳光明媚'},
      {'句子': '冬天很冷，路面经常结冰'},
      {'句子': '夏天经常下雨'},
      {'句子': '我们可以坐在外面吃午饭'},
      {'句子': '春天的天气真是太好了'},
      {'句子': '天气预报说今天会很好'},
      {'句子': '周末我们可以去海滩'},
      {'句子': '下午好，请坐，你好吗'},
      {'句子': '你最喜欢哪个季节'},
      {'句子': '发生了什么事'},
      {'句子': '看那朵云，要下雨了'},
      {'句子': '电影什么时候开始'},
      {'句子': '你的海边旅行怎么样'},
      {'句子': '我们在海里游泳'},
      {'句子': '我通常用电脑获取信息'},
      {'句子': '我也喜欢上网聊天'},
      {'句子': '你认为上网是浪费时间吗'},
      {'句子': '这附近哪里可以停车'},
      {'句子': '你经常上网吗'},
      {'句子': '我想找个舒适的旅行方式'},
      {'句子': '竞争对手多，要抓紧行动'},
      {'句子': '礼物要有意义和创意'}]
    Routine trials
    Routine recall
    Routine blank
  LoopTerminator trials_2
  Routine end
